<?xml version="1.0" encoding="ISO-8859-1"?>
<kilroy_configuration num_valves = "3" num_pumps = "1">
  <valve_commands>
    <valve_cmd name = "Hybridization 1">
       <valve_pos valve_ID = "2" port_ID = "1"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 2">
       <valve_pos valve_ID = "2" port_ID = "2"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 3">
       <valve_pos valve_ID = "2" port_ID = "3"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 4">
       <valve_pos valve_ID = "2" port_ID = "4"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 5">
       <valve_pos valve_ID = "2" port_ID = "5"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 6">
       <valve_pos valve_ID = "2" port_ID = "6"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 7">
       <valve_pos valve_ID = "2" port_ID = "7"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 8">
       <valve_pos valve_ID = "1" port_ID = "1"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 9">
       <valve_pos valve_ID = "1" port_ID = "2"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 10">
       <valve_pos valve_ID = "1" port_ID = "3"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 11">
       <valve_pos valve_ID = "1" port_ID = "4"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 12">
       <valve_pos valve_ID = "1" port_ID = "5"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 13">
       <valve_pos valve_ID = "1" port_ID = "6"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 14">
       <valve_pos valve_ID = "1" port_ID = "7"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 15">
       <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "3" port_ID = "1"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 16">
       <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "3" port_ID = "2"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 17">
       <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "3" port_ID = "3"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Hybridization 18">
       <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "3" port_ID = "4"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Wash">
       <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "3" port_ID = "5"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "2SSC">
       <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "3" port_ID = "7"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Imaging Buffer">
       <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "3" port_ID = "6"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "TCEP">
       <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "2" port_ID = "8"></valve_pos>
       <valve_pos valve_ID = "3" port_ID = "8"></valve_pos>
    </valve_cmd>
  </valve_commands>

  <pump_commands>
     <pump_cmd name = "Fast Flow">
       <pump_config speed = "30.0" direction = "Forward"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Very Fast Flow">
       <pump_config speed = "40.0" direction = "Forward"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Fast Reverse">
       <pump_config speed = "10.0" direction = "Reverse"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Normal Flow">
       <pump_config speed = "22" direction = "Forward"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Reverse Flow">
       <pump_config speed = "10" direction = "Reverse"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Slow Flow">
       <pump_config speed = "0.01" direction = "Forward"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Stop Flow">
       <pump_config speed = "0.0"></pump_config>
     </pump_cmd>
  </pump_commands>

  <kilroy_protocols>

     <protocol name = "Slow 5min">
	<pump duration = "300">Slow Flow</pump>
	<pump duration = "0">Stop Flow</pump>
     </protocol>

     <protocol name = "Slow 15min">
	<pump duration = "900">Slow Flow</pump>
	<pump duration = "0">Stop Flow</pump>
     </protocol>

     <protocol name = "Slow 60min">
	<pump duration = "3600">Slow Flow</pump>
	<pump duration = "0">Stop Flow</pump>
     </protocol>

     <protocol name = "Slow 3 hour">
	<pump duration = "10800">Slow Flow</pump>
	<pump duration = "0">Stop Flow</pump>
     </protocol>


     <protocol name = "Hybridize 1">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 1</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>

     <protocol name = "Hybridize 2">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 2</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>

     <protocol name = "Hybridize 3">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 3</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>	

     <protocol name = "Hybridize 4">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 4</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>

     <protocol name = "Hybridize 5">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 5</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>

     <protocol name = "Hybridize 6">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 6</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>

     <protocol name = "Hybridize 7">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 7</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>

     <protocol name = "Hybridize 8">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 8</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>

     <protocol name = "Hybridize 9">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 9</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>

     <protocol name = "Hybridize 10">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 10</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>
     <protocol name = "Hybridize 11">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 11</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>
     <protocol name = "Hybridize 12">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 12</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>
     <protocol name = "Hybridize 13">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 13</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>
     <protocol name = "Hybridize 14">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 14</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>
     <protocol name = "Hybridize 15">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 15</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>
     <protocol name = "Hybridize 16">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Hybridization 16</valve>
	<pump duration = "200">Very Fast Flow</pump>
	<pump duration = "700">Stop Flow</pump>
	<valve duration = "10">Wash</valve>
	<pump duration = "100">Very Fast Flow</pump>
	<pump duration = "10">Stop Flow</pump>
     </protocol>

	<protocol name = "Cleave">
        <pump duration = "0">Stop Flow</pump>
        <valve duration = "5">TCEP</valve>
        <pump duration = "200">Very Fast Flow</pump>
	<pump duration = "900">Stop Flow</pump>
        <valve duration = "5">2SSC</valve>
	<pump duration = "180">Normal Flow</pump>
	<pump duration = "10">Stop Flow</pump>
	</protocol>

     <protocol name = "Flow Image Buffer">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">Imaging Buffer</valve>
	<pump duration = "300">Normal Flow</pump>
	<pump duration = "30">Stop Flow</pump>
	</protocol>

     <protocol name = "Flow SSC">
        <pump duration = "0">Stop Flow</pump>
	<valve duration = "10">2SSC</valve>
	<pump duration = "150">Very Fast Flow</pump>
	<pump duration = "30">Stop Flow</pump>
	</protocol>

     <protocol name = "Wash 1-8">
	<pump duration = "0">Very Fast Flow</pump>
	<valve duration = "100">Hybridization 1</valve>
	<valve duration = "100">Hybridization 2</valve>
	<valve duration = "100">Hybridization 3</valve>
	<valve duration = "100">Hybridization 4</valve>
	<valve duration = "100">Hybridization 5</valve>
	<valve duration = "100">Hybridization 6</valve>
	<valve duration = "100">Hybridization 7</valve>
	<valve duration = "100">Hybridization 8</valve>
	<pump duration = "0">Stop Flow</pump>
</protocol>




     <protocol name = "Wash All">
	<pump duration = "0">Very Fast Flow</pump>
	<valve duration = "100">Hybridization 1</valve>
	<valve duration = "100">Hybridization 2</valve>
	<valve duration = "100">Hybridization 3</valve>
	<valve duration = "100">Hybridization 4</valve>
	<valve duration = "100">Hybridization 5</valve>
	<valve duration = "100">Hybridization 6</valve>
	<valve duration = "100">Hybridization 7</valve>
	<valve duration = "100">Hybridization 8</valve>
	<valve duration = "100">Hybridization 9</valve>
	<valve duration = "100">Hybridization 10</valve>
	<valve duration = "100">Hybridization 11</valve>
	<valve duration = "100">Hybridization 12</valve>
	<valve duration = "100">Hybridization 13</valve>
	<valve duration = "100">Hybridization 14</valve>
	<valve duration = "100">Hybridization 15</valve>
	<valve duration = "100">Hybridization 16</valve>
	<valve duration = "40">2SSC</valve>
	<valve duration = "40">Imaging Buffer</valve>
	<valve duration = "40">Wash</valve>
	<valve duration = "40">TCEP</valve>
	<pump duration = "0">Stop Flow</pump>
</protocol>


     <protocol name = "Prime All">
	<pump duration = "0">Very Fast Flow</pump>
	<valve duration = "40">Hybridization 1</valve>
	<valve duration = "40">Hybridization 2</valve>
	<valve duration = "40">Hybridization 3</valve>
	<valve duration = "40">Hybridization 4</valve>
	<valve duration = "40">Hybridization 5</valve>
	<valve duration = "40">Hybridization 6</valve>
	<valve duration = "40">Hybridization 7</valve>
	<valve duration = "40">Hybridization 8</valve>
	<valve duration = "40">Hybridization 9</valve>
	<valve duration = "40">Hybridization 10</valve>
	<valve duration = "40">Hybridization 11</valve>
	<valve duration = "40">Hybridization 12</valve>
	<valve duration = "40">Hybridization 13</valve>
	<valve duration = "40">Hybridization 14</valve>
	<valve duration = "40">Hybridization 15</valve>
	<valve duration = "40">Hybridization 16</valve>
	<valve duration = "40">2SSC</valve>
	<valve duration = "40">Imaging Buffer</valve>
	<valve duration = "40">Wash</valve>
	<valve duration = "40">TCEP</valve>
	<pump duration = "0">Stop Flow</pump>
	</protocol>

   </kilroy_protocols>
</kilroy_configuration>
